generate_image Parameters :=
; a sample file on how to use generate_image

;;;;; a number of keywords as in Interfile
; (possible values are given by using a | notation)

; optional: values: PET|nucmed *defaults to PET for backwards compatibility)
imaging modality:=PET
; optional patient position keywords (defaulting to "unknown")
; orientation: allowed values: head_in|feet_in|other|unknown
patient orientation := head_in
; rotation: allowed values: prone|supine|other|unknown
patient rotation :=  supine
; optional keywords to set image timing
image duration (sec) := 1e+09 ; defaults to -1 (i.e. unknown)
image relative start time (sec) := 0 ; defaults to zero

;;;;; specific keywords

output filename:=moliner_phantom
output file format type:= Interfile
  interfile Output File Format Parameters:=
    number format := float
    number_of_bytes_per_pixel:=4
    ; fix the scale factor to 1
    ; comment out next line to let STIR use the full dynamic 
    ; range of the output type
    scale_to_write_data:= 1
  End Interfile Output File Format Parameters:=

X output image size (in pixels) := 121
Y output image size (in pixels) := 121
Z output image size (in pixels) := 59
X voxel size (in mm) := 2.1
Y voxel size (in mm) := 2.1
Z voxel size (in mm) := 2.1

; parameters that determine subsampling of border voxels
; to obtain smooth edges
; setting these to 1 will just check if the centre of the voxel is in or out
; default to 5
; Z number of samples to take per voxel := 5
; Y number of samples to take per voxel := 5
; X number of samples to take per voxel := 5

; now follows a list of shapes and their values
; each will be added to the image (so values accumulate)
; see Shape3D hierarchy for possibly shapes

shape type:= ellipsoidal cylinder
Ellipsoidal Cylinder Parameters:=
   radius-x (in mm) := 67.5
   radius-y (in mm) := 67.5
   length-z (in mm) := 100
   ; optional start-end angles to define a wedge as opposed to a full cylinder
   ; initial angle (in deg) :=10
   ; final angle (in deg) :=90

   ; next keyword can be used for non-default axes
   ; values below are give a rotation around y for 90 degrees (swapping x and z)
   ; Warning: this uses the STIR convention {z,y,x}
   ; direction vectors (in mm):= { {0,0,1}, {0,1,0}, {-1,0,0}}
   ; origin w.r.t. to standard STIR coordinate system (middle of first plane)
   origin (in mm):={64, 0, 0}
   END:=
value := 0.15

next shape:=

shape type:= ellipsoidal cylinder
Ellipsoidal Cylinder Parameters:=
   radius-x (in mm) := 4.5
   radius-y (in mm) := 4.5
   length-z (in mm) := 50
   ; optional start-end angles to define a wedge as opposed to a full cylinder
   ; initial angle (in deg) :=10
   ; final angle (in deg) :=90

   ; next keyword can be used for non-default axes
   ; values below are give a rotation around y for 90 degrees (swapping x and z)
   ; Warning: this uses the STIR convention {z,y,x}
   direction vectors (in mm):= { {1,0,0}, {0,-1,0}, {0,0,1}}
   ; origin w.r.t. to standard STIR coordinate system (middle of first plane)
   origin (in mm):={38, -34.617744028303, 3.028656085211}
   END:=
value := 0.45

next shape:=

shape type:= ellipsoidal cylinder
Ellipsoidal Cylinder Parameters:=
   radius-x (in mm) := 2.25
   radius-y (in mm) := 2.25
   length-z (in mm) := 50
   ; optional start-end angles to define a wedge as opposed to a full cylinder
   ; initial angle (in deg) :=10
   ; final angle (in deg) :=90

   ; next keyword can be used for non-default axes
   ; values below are give a rotation around y for 90 degrees (swapping x and z)
   ; Warning: this uses the STIR convention {z,y,x}
   direction vectors (in mm):= { {1,0,0}, {0,-1,0}, {0,0,1}}
   ; origin w.r.t. to standard STIR coordinate system (middle of first plane)
   origin (in mm):={38, -14.686008116153, 31.49424603975}
   END:=
value := 0.45

next shape:=

shape type:= ellipsoidal cylinder
Ellipsoidal Cylinder Parameters:=
   radius-x (in mm) := 10
   radius-y (in mm) := 10
   length-z (in mm) := 50
   ; optional start-end angles to define a wedge as opposed to a full cylinder
   ; initial angle (in deg) :=10
   ; final angle (in deg) :=90

   ; next keyword can be used for non-default axes
   ; values below are give a rotation around y for 90 degrees (swapping x and z)
   ; Warning: this uses the STIR convention {z,y,x}
   direction vectors (in mm):= { {1,0,0}, {0,-1,0}, {0,0,1}}
   ; origin w.r.t. to standard STIR coordinate system (middle of first plane)
   origin (in mm):={38, 19.931790566351, 28.46550621137}
   END:=
value := -0.15

next shape:=

shape type:= ellipsoidal cylinder
Ellipsoidal Cylinder Parameters:=
   radius-x (in mm) := 3
   radius-y (in mm) := 3
   length-z (in mm) := 50
   ; optional start-end angles to define a wedge as opposed to a full cylinder
   ; initial angle (in deg) :=10
   ; final angle (in deg) :=90

   ; next keyword can be used for non-default axes
   ; values below are give a rotation around y for 90 degrees (swapping x and z)
   ; Warning: this uses the STIR convention {z,y,x}
   direction vectors (in mm):= { {1,0,0}, {0,-1,0}, {0,0,1}}
   ; origin w.r.t. to standard STIR coordinate system (middle of first plane)
   origin (in mm):={38, 34.617744028303, -3.028656085211}
   END:=
value := 0.45

next shape:=

shape type:= ellipsoidal cylinder
Ellipsoidal Cylinder Parameters:=
   radius-x (in mm) := 6
   radius-y (in mm) := 6
   length-z (in mm) := 50
   ; optional start-end angles to define a wedge as opposed to a full cylinder
   ; initial angle (in deg) :=10
   ; final angle (in deg) :=90

   ; next keyword can be used for non-default axes
   ; values below are give a rotation around y for 90 degrees (swapping x and z)
   ; Warning: this uses the STIR convention {z,y,x}
   direction vectors (in mm):= { {1,0,0}, {0,-1,0}, {0,0,1}}
   ; origin w.r.t. to standard STIR coordinate system (middle of first plane)
   origin (in mm):={38, 14.686008116153, -31.49424603975}
   END:=
value := 0.45

next shape:=

shape type:= ellipsoidal cylinder
Ellipsoidal Cylinder Parameters:=
   radius-x (in mm) := 7.5
   radius-y (in mm) := 7.5
   length-z (in mm) := 50
   ; optional start-end angles to define a wedge as opposed to a full cylinder
   ; initial angle (in deg) :=10
   ; final angle (in deg) :=90

   ; next keyword can be used for non-default axes
   ; values below are give a rotation around y for 90 degrees (swapping x and z)
   ; Warning: this uses the STIR convention {z,y,x}
   direction vectors (in mm):= { {1,0,0}, {0,-1,0}, {0,0,1}}
   ; origin w.r.t. to standard STIR coordinate system (middle of first plane)
   origin (in mm):={38, -19.931790566351, -28.46550621137}
   END:=
value := -0.15

END:=
